PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PschoPy Tutorial 6- Delay Discounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP" + str(reward_today) + "today" + "or" + " GBP " + str(future_reward) + " after " + str(delay) + " days "
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    KeyboardComponent key_resp
      allowedKeys = 't','1',
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/PsychoPy tutorial 6- Delay Discounting (Conditions).xlsx
    loopType = random
    nReps = 50
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162}]
    Routine trial
  LoopTerminator trials
