PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1000, 600]
  expName = PsychoPy Tutorial 1- Staircase
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent fiftyfifty
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5: # 50:50 probability
            direction = -level
            corr_resp = 'left'
        else:
             direction = level
             corr_resp = 'right'
      End Routine:
        thisExp.addData('corrAns' , corr_resp)
        thisExp.addData('tilt' , direction)
        thisExp.addData('key_resp.corr' , key_resp.corr)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    GratingComponent grating
      contrast = 0.5
      mask = gauss
      ori [set every repeat] = direction
      sf = 8
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = Scorr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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Flow
  LoopInitiator trials_2 loopType="StairHandler"
    N down = 3
    N up = 1
    loopType = staircase
    max value = 20
    min value = 0
    nReps = 50
    start value = 10
    step sizes = [2,1,1,0.5]
    step type = lin
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    Routine trial
  LoopTerminator trials_2
