PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Solo project- Word recognition
  keyboardBackend = ioHub
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Routines
  Routine Routine_1
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Routine_2
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Word recognition conditions 1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'bag'},
      {'Study_word': 'laptop'},
      {'Study_word': 'helmet'},
      {'Study_word': 'chair'},
      {'Study_word': 'pillow'},
      {'Study_word': 'candle'},
      {'Study_word': 'cooker'},
      {'Study_word': 'glasses'},
      {'Study_word': 'marble'},
      {'Study_word': 'cupboard'}]
    Routine Routine_1
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Word recognition condition 2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'b_g'},
      {'test_word': 'l_pt_o_'},
      {'test_word': '_el_e_'},
      {'test_word': 'c_a_r'},
      {'test_word': 'p_l__w'},
      {'test_word': '_an_l_'},
      {'test_word': 'g_a_se_'},
      {'test_word': 'm_r_le'},
      {'test_word': '__al_ow'},
      {'test_word': 'b_t'},
      {'test_word': 'c__k_r'}]
    Routine Routine_2
  LoopTerminator trials_2
