PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Solo project-object recognition
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent image
      image [set every repeat] = $pics
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine second_phase
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 00
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        If you have seen the picture press ' y ' and if not then press 'n'
    ImageComponent image_2
      image [set every repeat] = $images
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = first phase.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'pics': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures Old\\blue.jpg'},
      {'pics': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures Old\\humming.jpg'},
      {'pics': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures Old\\kingfisher.jpg'},
      {'pics': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures Old\\lotus.jpg'},
      {'pics': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures Old\\lotus_pond.jpg'},
      {'pics': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures Old\\pomegranate.jpg'},
      {'pics': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures Old\\puppy.jpg'},
      {'pics': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures Old\\qutub-minar.jpg'},
      {'pics': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures Old\\taj-mahal.jpg'}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
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = second phase.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'images': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures New_old\\berries-new.jpg'},
      {'images': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures New_old\\bird-new.jpg'},
      {'images': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures New_old\\bb.jpg'},
      {'images': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures New_old\\flower-new.jpg'},
      {'images': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures New_old\\hum.jpg'},
      {'images': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures New_old\\king.jpg'},
      {'images': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures New_old\\pink.jpg'},
      {'images': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures New_old\\pp.jpg'},
      {'images': 'C:\\Users\\Nikita\\Desktop\\Lab in Psychology-Solo Project- Object recognition Task Conditions\\Visual experiment pictures New_old\\red.jpg'}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
    Routine second_phase
  LoopTerminator trials_2
